PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'età': '20'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2024.2.4
  Window size (pixels) = [1280, 853]
  color = -1.0000, -1.0000, -1.0000
  expName = main
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine instructionRoutine
    RoutineSettingsComponent instructionRoutine
      saveStartStop = False
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    TextComponent InstructionText
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Benvenuto!

        In questo esperimento, devi indicare se delle parole appartengono a delle determinate categorie.  Ti verrà prima mostrata la categoria come
        "È <nome della categoria>?"
        quindi:
        - Premi il tasto [freccia destra] (->) se la parola successiva appartiene alla categoria indicata.
        - Premi il tasto [freccia sinistra] (<-) se la parola successiva NON appartiene alla categoria indicata.

        Cerca di rispondere il più velocemente possibile!

        Dovrai valutare un totale di 40 parole.

        premi [SPAZIO] per continuare
    TextComponent rightKey
      color = -1.0000, 0.0039, -1.0000
      letterHeight = 0.04
      pos = (0.025, 0.045)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = [freccia destra] (->)
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    TextComponent leftKey
      color = 1.0000, -1.0000, -1.0000
      letterHeight = 0.04
      pos = (0.025, -0.045)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = [freccia sinistra] (<-)
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    KeyboardComponent InstructionsKeyResponse
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trialRoutine
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    CodeComponent code
      Code Type = JS
      Begin JS Routine:
        // Nel tab "Begin Routine"

        category_duration = 1.498;

        prime_start = category_duration;
        prime_duration = 0.049;

        mask_start = prime_start + prime_duration;
        mask_duration = 0.049;

        empty_text_start = mask_start + mask_duration;
        empty_text_duration = expInfo['blankDuration'];

        target_text_start = empty_text_start + empty_text_duration;

        currentCategoryText = `È ${category.replace(/_/g, ' ')}?`;
    TextComponent Category
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $category_duration
      text [set every repeat] = $currentCategoryText
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    TextComponent Prime
      letterHeight = 0.05
      startVal [time (s)] = $prime_start
      stopVal [duration (s)] = $prime_duration
      text [set every repeat] = $prime
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    TextComponent Mask
      letterHeight = 0.05
      startVal [time (s)] = $mask_start
      stopVal [duration (s)] = $mask_duration
      text = XXXXXXXXX
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    TextComponent EmptyInterval
      letterHeight = 0.05
      startVal [time (s)] = $empty_text_start
      stopVal [duration (s)] = $empty_text_duration
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    TextComponent Target
      letterHeight = 0.05
      startVal [time (s)] = $target_text_start
      text [set every repeat] = $target
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    KeyboardComponent TargetKeyResponse
      allowedKeys = 'left','right'
      correctAns = $is_in_category
      forceEndRoutine = True
      startVal [time (s)] = $target_text_start
      storeCorrect = True
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    CodeComponent saveBlankDuration
      Code Type = JS
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      End JS Routine:
        psychoJS._experiment.addData("blankDuration", empty_text_duration);
        hashedIP = expInfo["ip_address_hashed"]
        psychoJS._experiment.addData('ip_address_hashed', hashedIP);
        psychoJS._experiment.addData('browser_userAgent', navigator.userAgent);
        psychoJS._experiment.addData('browser_platform', navigator.platform);
        psychoJS._experiment.addData('browser_language', navigator.language);
        psychoJS._experiment.addData('browser_vendor', navigator.vendor);
        psychoJS._experiment.addData('browser_cookiesEnabled', navigator.cookieEnabled);
        psychoJS._experiment.addData('screen_resolution', `${window.screen.width}x${window.screen.height}`);
        psychoJS._experiment.addData('screen_colorDepth', window.screen.colorDepth);
        psychoJS._experiment.addData('screen_pixelDepth', window.screen.pixelDepth);
        psychoJS._experiment.addData('timezone', Intl.DateTimeFormat().resolvedOptions().timeZone);
  Routine SemanticCategory
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        # Nel tab "Begin Routine"
        # Recupera le variabili
        category = expInfo['category']

        # Formatta il testo
        testo_dinamico = f"""
        {category} (<-)
        """

        # Aggiorna il componente Text
        category_text.setText(testo_dinamico)
    TextComponent category_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.498
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  Routine ThanksRoutine
    RoutineSettingsComponent ThanksRoutine
      saveStartStop = False
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    TextComponent text_3
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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      text:
        Grazie per la tua partecipazione!

        Sto salvando i risultati...

        Attendi qualche istante prima di chiudere la scheda
    CodeComponent code_3
      Code Type = JS
      Begin JS Routine:
        // Disable downloading results to browser
        psychoJS._saveResults = 0; //should be set to 0

        // Generate filename for results
        let filename = psychoJS._experiment._experimentName + '_' + psychoJS._experiment._datetime + '.csv';

        // Extract data object from experiment and filter only rows with trialRoutine.started
        let dataObj = psychoJS._experiment._trialsData.filter(row => 'trialRoutine.started' in row);

        // Remove 'filtered_data' field from each row if it exists
        dataObj.forEach(row => {
            if ('filtered_data' in row) {
                delete row['filtered_data'];
            }
        });

        // Convert data object to CSV
        let headers = Object.keys(dataObj[0]);
        let data = headers.join(',') + '\n' + dataObj.map(row => {
            return headers.map(header => {
                let value = row[header];

                // Convert all values to strings for consistent handling
                if (value === null || value === undefined) {
                    return '';
                }

                // Handle objects, arrays, and other complex types
                if (typeof value === 'object') {
                    value = JSON.stringify(value).replace(/,/g, ';');
                } else {
                    value = String(value);
                }

                // Properly escape for CSV - enclose in quotes and double any quotes inside
                if (value.includes(',') || value.includes('"') || value.includes('\n') || value.includes('\r')) {
                    return '"' + value.replace(/"/g, '""') + '"';
                }

                return value;
            }).join(',');
        }).join('\n');

        // Send data to OSF (${}) DataPipe
        console.log('Saving data...');
        fetch('https://pipe.jspsych.org/api/data', {
            method: 'POST',
            headers: {
                'Content-Type': 'application/json',
                'Accept': '*/*',
            },
            body: JSON.stringify({
                experimentID: 'Y21w7ySgKD5l', // * UPDATE WITH YOUR DATAPIPE EXPERIMENT ID *
                filename: filename,
                data: data,
            })
        })
        .then(response => response.json())
        .then(data => {
            // Log response and force experiment end
            console.log(data);
            quitPsychoJS();
        });
  Routine CodeRoutine
    RoutineSettingsComponent CodeRoutine
      saveStartStop = False
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    CodeComponent SamplingCSV
      Code Type = JS
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      Begin JS Experiment:
        // Inserire questo codice in una componente "Begin Experiment"
        async function loadAndProcessCSV() {
            try {
                // 1. Caricamento CSV con cache-buster
                const cacheBuster = `?t=${new Date().getTime()}`;
                const response = await fetch(`condizioni_complete_for_exp.csv${cacheBuster}`);

                if (!response.ok) {
                    throw new Error(`HTTP error! Status: ${response.status}`);
                }

                const csvText = await response.text();

                // 2. Parsing avanzato del CSV
                const lines = csvText.split(/\r\n|\n/).filter(line => line.trim() !== '');
                const headers = lines[0].split(',').map(h => h.trim().replace(/"/g, ''));

                const records = [];
                for (let i = 1; i < lines.length; i++) {
                    const values = lines[i].split(/,(?=(?:[^"]*"[^"]*")*[^"]*$)/)
                                     .map(v => v.trim().replace(/^"|"$/g, ''));

                    const record = {};
                    for (let j = 0; j < headers.length; j++) {
                        record[headers[j]] = values[j] || '';
                    }
                    records.push(record);
                }

                // 3. Log di debug SICURO
                console.log('CSV caricato correttamente:');
                console.log('Headers:', headers);
                console.log('Prime 3 righe:', JSON.stringify(records.slice(0, 3), null, 2));
                console.log('Ultime 3 righe:', JSON.stringify(records.slice(-3), null, 2));

                // 4. Selezione casuale della relazione (escludendo "Random")
                const relations = [...new Set(records.map(r => r.relation))]
                                  .filter(r => r !== "Random");
                console.log("Relation options:", relations);
                const selectedRelation = relations[Math.floor(Math.random() * relations.length)];

                // 5. Filtro dei dati e creazione copie
                expInfo.filtered_data = records.filter(r =>
                    r.relation === selectedRelation || r.relation === "Random"
                ).map(row => ({ ...row })); // Crea copie per evitare side effects

                // 6. Raccogli righe scartate
                const discardedRows = records.filter(r =>
                    r.relation !== selectedRelation && r.relation !== "Random"
                );

                // 7. Estrai primes validi dalle righe scartate
                const availablePrimes = discardedRows
                    .map(r => r.prime)
                    .filter(p => p.trim() !== "");

                // 8. Assegnazione casuale dei prime alle righe "Random"
                if (availablePrimes.length > 0) {
                    expInfo.filtered_data.forEach(row => {
                        if (row.relation === "Random") {
                            const randomIndex = Math.floor(Math.random() * availablePrimes.length);
                            row.prime = availablePrimes[randomIndex];
                            //row.original_prime = row.original_prime || row.prime; // Mantiene traccia
                        }
                    });
                } else {
                    console.warn("Nessun prime disponibile dalle righe scartate");
                }

                // 8.5 Riordinamento delle righe per evitare categorie consecutive uguali
                   // e non più di tre target "right" consecutivi
                   const shuffleData = () => {
                       const originalData = [...expInfo.filtered_data];
                       const reorderedData = [];

                       // Estrai tutte le categorie uniche
                       const uniqueCategories = [...new Set(originalData.map(r => r.category))];
                       console.log("Categorie uniche:", uniqueCategories);

                       // Se c'è una sola categoria, non possiamo evitare ripetizioni
                       if (uniqueCategories.length === 1) {
                           console.warn("Solo una categoria presente, impossibile evitare ripetizioni");
                           return originalData;
                       }

                       // 1. Estrai la prima riga casualmente
                       const randomIndex = Math.floor(Math.random() * originalData.length);
                       const firstRow = originalData.splice(randomIndex, 1)[0];
                       reorderedData.push(firstRow);

                       // 2. Controlla la categoria della prima riga
                       let lastCategory = firstRow.category;
                       let consecutiveLeftCount = firstRow.is_in_category === "right" ? 1 : 0;

                       // Continua finché ci sono righe nell'array originale
                       while (originalData.length > 0) {
                           // 3. Ottieni le righe che non hanno l'ultima categoria
                           let availableRows = originalData.filter(r => r.category !== lastCategory);

                           // Aggiungi vincolo: se abbiamo già 3 "right" consecutivi, escludi le righe "right"
                           if (consecutiveLeftCount >= 3) {
                               availableRows = availableRows.filter(r => r.is_in_category !== "right");
                               // Se non ci sono righe disponibili non-left, allora filtra solo in base alla categoria
                               if (availableRows.length === 0) {
                                   availableRows = originalData.filter(r => r.category !== lastCategory && r.is_in_category !== "right");
                               }
                           }

                           // Se non ci sono righe disponibili con i vincoli attuali
                           if (availableRows.length === 0) {
                               console.warn(`Non è stato possibile evitare una ripetizione della categoria ${lastCategory} o più di 3 "right" consecutivi`);
                               // Priorità più alta: evitare più di 3 "right" consecutivi
                               if (consecutiveLeftCount >= 3) {
                                   const nonLeftRows = originalData.filter(r => r.is_in_category !== "right");
                                   if (nonLeftRows.length > 0) {
                                       const nextRandomIndex = Math.floor(Math.random() * nonLeftRows.length);
                                       const nextRow = nonLeftRows[nextRandomIndex];
                                       const indexInOriginal = originalData.findIndex(r => r === nextRow);
                                       originalData.splice(indexInOriginal, 1);
                                       reorderedData.push(nextRow);
                                       lastCategory = nextRow.category;
                                       consecutiveLeftCount = 0; // Reset perché non è "right"
                                       continue;
                                   }
                               }

                               // Se non possiamo soddisfare i vincoli, prendiamo una riga qualsiasi
                               const nextRow = originalData.splice(0, 1)[0];
                               reorderedData.push(nextRow);
                               lastCategory = nextRow.category;
                               consecutiveLeftCount = nextRow.is_in_category === "right" ? consecutiveLeftCount + 1 : 0;
                           } else {
                               // 4. Estrai casualmente una riga dalle righe disponibili
                               const nextRandomIndex = Math.floor(Math.random() * availableRows.length);
                               const nextRow = availableRows[nextRandomIndex];

                               // Rimuovi la riga scelta dall'array originale
                               const indexInOriginal = originalData.findIndex(r => r === nextRow);
                               originalData.splice(indexInOriginal, 1);

                               // Aggiungi la riga scelta al nuovo array
                               reorderedData.push(nextRow);

                               // 5. Aggiorna l'ultima categoria e il conteggio consecutivo
                               lastCategory = nextRow.category;
                               consecutiveLeftCount = nextRow.is_in_category === "right" ? consecutiveLeftCount + 1 : 0;
                           }
                       }

                       // Verifica finale: nessuna categoria consecutiva uguale?
                       let hasConsecutiveSameCategory = false;
                       for (let i = 1; i < reorderedData.length; i++) {
                           if (reorderedData[i].category === reorderedData[i-1].category) {
                               hasConsecutiveSameCategory = true;
                               console.warn(`Categorie consecutive uguali trovate: ${reorderedData[i].category} alle posizioni ${i-1} e ${i}`);
                           }
                       }

                       if (!hasConsecutiveSameCategory) {
                           console.log("Riordinamento completato con successo: nessuna categoria consecutiva uguale");
                       }

                       // Verifica dei "right" consecutivi
                       let maxConsecutiveLeft = 0;
                       let currentConsecutiveLeft = 0;
                       for (let i = 0; i < reorderedData.length; i++) {
                           if (reorderedData[i].is_in_category === "right") {
                               currentConsecutiveLeft++;
                               maxConsecutiveLeft = Math.max(maxConsecutiveLeft, currentConsecutiveLeft);
                           } else {
                               currentConsecutiveLeft = 0;
                           }
                       }

                       console.log(`Numero massimo di "right" consecutivi: ${maxConsecutiveLeft}`);

                       // Stampa la sequenza di is_in_category
                       console.log('Sequenza is_in_category:');
                       console.log(reorderedData.map(r => r.is_in_category).join(', '));

                       return reorderedData;
                   };

                   // Applica l'algoritmo di riordinamento
                   expInfo.filtered_data = shuffleData();

                // 9. Setup variabili globali
                expInfo.relation = selectedRelation;
                //psychoJS.experiment.addData('selected_relation', selectedRelation);
                //expInfo.all_relations = [...new Set(records.map(r => r.relation))];

                console.log(`Relazione selezionata: ${selectedRelation}`);
                console.log(`Prime disponibili: ${availablePrimes.length}`);
                console.log(`Righe filtrate: ${expInfo.filtered_data.length}`);
                console.log('Dati finali (primi 3):', JSON.stringify(expInfo.filtered_data.slice(0, 3), null, 2));

                // Log aggiuntivo per verificare le categorie consecutive
                console.log('Sequenza categorie:');
                console.log(expInfo.filtered_data.map(r => r.category).join(', '));

                // Log per verificare i valori di is_in_category
                console.log('Sequenza is_in_category:');
                console.log(expInfo.filtered_data.map(r => r.is_in_category).join(', '));



            } catch (error) {
                console.error('Errore critico:', error);
                psychoJS.gui.dialog.error({
                    msg: `Errore nel caricamento del CSV: ${error.message}\n\nVerifica che:
                    - Il file condizioni.csv esista
                    - Sia nella stessa cartella dell'esperimento
                    - Abbia i permessi corretti`
                });
                psychoJS.core.quit();
            }
        }
        // Esegui la funzione
        loadAndProcessCSV().catch(error => {
            console.error('Errore non gestito:', error);
            psychoJS.core.quit();
        });
        // Imposta la durata casuale
        empty_text_duration = Math.random() < 0.5 ? 0.049 : 0.301;
        expInfo["blankDuration"] = empty_text_duration;

        // Inserisci questo codice in una Code Component (nella sezione "Begin Experiment")
        async function getIP() {
            try {
                const response = await fetch("https://api.ipify.org?format=json");
                const data = await response.json();
                return data.ip;
            } catch (error) {
                console.error("Errore nel recupero dell'IP:", error);
                return "unknown";
            }
        }

        // Assegna l'IP ai dati dell'esperimento
        async function hashString(string) {
            // Check if Web Crypto API is available
            if (typeof crypto !== 'undefined' && crypto.subtle && typeof crypto.subtle.digest === 'function') {
                try {
                    // Converti la stringa in un ArrayBuffer
                    const encoder = new TextEncoder();
                    const data = encoder.encode(string);

                    // Genera l'hash SHA-256
                    const hashBuffer = await crypto.subtle.digest('SHA-256', data);

                    // Converti l'ArrayBuffer in stringa esadecimale
                    const hashArray = Array.from(new Uint8Array(hashBuffer));
                    return hashArray.map(b => b.toString(16).padStart(2, '0')).join('');
                } catch (error) {
                    console.error("Errore durante la generazione dell'hash:", error);
                    return fallbackHash(string);
                }
            } else {
                console.warn("Web Crypto API non disponibile, utilizzo algoritmo di fallback");
                return fallbackHash(string);
            }
        }

        // Simple fallback hash function
        function fallbackHash(str) {
            let hash = 0;
            for (let i = 0; i < str.length; i++) {
                const char = str.charCodeAt(i);
                hash = ((hash << 5) - hash) + char;
                hash = hash & hash; // Convert to 32bit integer
            }
            // Convert to hex string and add timestamp to make it more unique
            return Math.abs(hash).toString(16);
        }

        getIP().then(async (ip) => {
            const hashedIP = await hashString(ip);
            expInfo["ip_address_hashed"] = hashedIP;

        });
Flow
  Routine CodeRoutine
  Routine instructionRoutine
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $expInfo.filtered_data
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('category', 'ANIMALI'), ('prime', 'RATTO'), ('target', 'gatto'), ('soa', 147), ('condizione_fon', 'rima'), ('condizione_sem', 'correlato'), ('corretta_risposta', 's')]),
      OrderedDict([('category', 'ANIMALI'), ('prime', 'CANE'), ('target', 'cane'), ('soa', 147), ('condizione_fon', 'no_rima'), ('condizione_sem', 'correlato'), ('corretta_risposta', 's')]),
      OrderedDict([('category', 'ANIMALI'), ('prime', 'RATTO'), ('target', 'tetto'), ('soa', 147), ('condizione_fon', 'rima'), ('condizione_sem', 'correlato'), ('corretta_risposta', 's')]),
      OrderedDict([('category', 'ANIMALI'), ('prime', 'CANE'), ('target', 'pane'), ('soa', 147), ('condizione_fon', 'no_rima'), ('condizione_sem', 'correlato'), ('corretta_risposta', 's')])]
    Routine trialRoutine
  LoopTerminator trials
  Routine ThanksRoutine
